WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(Cam1, Cam2, Cam3, Cam4, Cam5, Cam6, Cam7)
-> GroupWorkflow "Define Cam and Timer"
    ExternalizedMapping(Index(DisplayName=Cam1))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam1
    -> Timestamp
    -> MemberSelector(Selector=Timestamp)
    -> PublishSubject Timer

    ExternalizedMapping(Index(DisplayName=Cam2))
    -> Bonsai.Video.VideoCaptureDevice
      Index=2
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam2

    ExternalizedMapping(Index(DisplayName=Cam3))
    -> Bonsai.Video.VideoCaptureDevice
      Index=4
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam3

    ExternalizedMapping(Index(DisplayName=Cam4))
    -> Bonsai.Video.VideoCaptureDevice
      Index=3
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam4

    ExternalizedMapping(Index(DisplayName=Cam5))
    -> Bonsai.Video.VideoCaptureDevice
      Index=5
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam5

    ExternalizedMapping(Index(DisplayName=Cam6))
    -> Bonsai.Video.VideoCaptureDevice
      Index=1
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam6

    ExternalizedMapping(Index(DisplayName=Cam7))
    -> Bonsai.Video.VideoCaptureDevice
      Index=6
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam7

ExternalizedMapping(Period(DisplayName="Video length"))
-> Timer(DueTime=PT0S, Period=PT1H)
-> PublishSubject "video time"

ExternalizedMapping(Value(DisplayName=Base_Filename))
-> StringProperty(Value=C:\Users\labuser\Documents\FED_Data\ZY)
-> BehaviorSubject rootpath

ExternalizedMapping(Value(DisplayName=Wheel_Threshold))
-> IntProperty(Value=15000)
-> PublishSubject Wheel_detect

ExternalizedMapping(PortName(DisplayName=Arduino_port))
-> Bonsai.Arduino.CreateArduino(Name=Arduino, PortName=COM5, BaudRate=57600, SamplingInterval=10)

SubscribeSubject Timer => #13
ExternalizedMapping(Start(DisplayName=SessionStart)) => #14
#13, #14 -> GroupWorkflow SessionStart
    WorkflowInput Source1
    -> MemberSelector(Selector=TimeOfDay) => #1
    ExternalizedMapping(Value(DisplayName=Start)) => #2
    #1, #2 -> GreaterThan(Operand=TimeSpanProperty(Value=PT20H))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> Take(Count=1) => #16
ExternalizedMapping(End(DisplayName=SessionEnd)) => #17
#16, #17 -> SelectMany SaveUntil
    ExternalizedMapping(Pin(DisplayName=FED1))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=2)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #2
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED1_.csv, Selector=it)
    -> PropertyMapping(FileName) => #5
    #2, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED2))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=3)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #10
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED2_.csv, Selector=it)
    -> PropertyMapping(FileName) => #13
    #10, #13 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED3))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=4)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #18
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED3_.csv, Selector=it)
    -> PropertyMapping(FileName) => #21
    #18, #21 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED4))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=5)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #26
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED4_.csv, Selector=it)
    -> PropertyMapping(FileName) => #29
    #26, #29 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED4_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED5))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=6)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #34
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED5_.csv, Selector=it)
    -> PropertyMapping(FileName) => #37
    #34, #37 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED5_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED6))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=7)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #42
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED6_.csv, Selector=it)
    -> PropertyMapping(FileName) => #45
    #42, #45 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED6_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED7))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=8)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #50
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED7_.csv, Selector=it)
    -> PropertyMapping(FileName) => #53
    #50, #53 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED7_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED8))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=9)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #58
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED8_.csv, Selector=it)
    -> PropertyMapping(FileName) => #61
    #58, #61 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED8_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED9))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=10)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #66
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED9_.csv, Selector=it)
    -> PropertyMapping(FileName) => #69
    #66, #69 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED9_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED10))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=11)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #74
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED10_.csv, Selector=it)
    -> PropertyMapping(FileName) => #77
    #74, #77 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED10_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED11))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=12)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #82
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED11_.csv, Selector=it)
    -> PropertyMapping(FileName) => #85
    #82, #85 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED11_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    ExternalizedMapping(Pin(DisplayName=FED12))
    -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=16)
    -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #90
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
          Script:
            count = 0

            @returns(int)
            def process(value):
              global count
              if value:
                count=count+1

              return count
        #0 -> Timestamp => #2
        -> MemberSelector(Selector=Timestamp) => #3
        #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
          Description="check event based on pulse duration"
          Script:
            event = ''
            startTime = 0
            duration = 0

            @returns(str)
            def process(value):
              global startTime,duration
              event = ''
              if value.Value:
                startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

              else:
                duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                if duration> 190 and duration<210:
                  event='pellet'
                elif duration> 90 and duration<190:
                  event='start'

              return event
        -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
          Script:
            count = 0
            @returns(int)
            def process(value):
              global count
              if value == "pellet":
                count=count+1
              return count
        #1, #3, #4, #6, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2 as TimeOfDay,
            Item3 as MilliSecond,
            Item1 as EventCount,
            Item4 as PelletCount,
            Item5 as Event
            )
        -> WorkflowOutput
    SubscribeSubject rootpath
    -> Format(Format={0}_FED12_.csv, Selector=it)
    -> PropertyMapping(FileName) => #93
    #90, #93 -> Bonsai.IO.CsvWriter(FileName=C:\Users\labuser\Documents\FED_Data\ZY_FED12_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=PelletCount)

    WorkflowInput Source1
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=Arduino, Pin=15) => #99
    ExternalizedMapping(DueTime(DisplayName="Stim Duration")) => #100
    #99, #100 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> Bonsai.Arduino.DigitalOutput(PortName=Arduino, Pin=15)

    SubscribeSubject Timer => #104
    -> MemberSelector(Selector=TimeOfDay) => #105
    #104 -> GroupWorkflow NextDay
        WorkflowInput Source1
        -> MemberSelector(Selector=TimeOfDay) => #1
        -> Skip(Count=1) => #2
        #2, #1 -> Zip
        -> LessThan
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> Take(Count=1) => #107
    #105, #107 -> SkipUntil => #108
    ExternalizedMapping(Value(DisplayName=End)) => #109
    #108, #109 -> GreaterThan(Operand=TimeSpanProperty(Value=PT9H))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat

SubscribeSubject Cam1 => #20
SubscribeSubject "video time" => #21
#20, #21 -> TakeUntil
-> GroupWorkflow Image_1 => #23
    WorkflowInput Source1 => #0
    -> Timestamp => #1
    #0 -> Bonsai.Vision.CropPolygon => #2
      Regions(ArrayOfPoint(Point(X=466, Y=93), Point(X=491, Y=93), Point(X=491, Y=103), Point(X=466, Y=103)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #4
    #2, #4 -> GroupWorkflow Left_wheel => #5
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=110, Y=110), Point(X=320, Y=110), Point(X=320, Y=400), Point(X=110, Y=400)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Left_mouse => #7
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon => #8
      Regions(ArrayOfPoint(Point(X=460, Y=92), Point(X=485, Y=92), Point(X=485, Y=102), Point(X=460, Y=102)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #10
    #8, #10 -> GroupWorkflow Right_wheel => #11
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=380, Y=101), Point(X=590, Y=101), Point(X=590, Y=391), Point(X=380, Y=391)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Right_mouse => #13
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #5, #7, #11, #13 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L,
        Item3 as Wheelcount_R,
        Item4.X as X_R,
        Item4.Y as Y_R
        )
    #1, #15 -> Zip
    -> WorkflowOutput
SubscribeSubject rootpath
-> Format(Format={0}_Cam1_.csv, Selector=it)
-> PropertyMapping(FileName) => #26
#23, #26 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam1_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2"
-> MemberSelector(Selector=Item1.Value) => #28
SubscribeSubject rootpath
-> Format(Format={0}_Cam1_.avi, Selector=it)
-> PropertyMapping(FileName) => #31
#28, #31 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam1_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Repeat

SubscribeSubject Cam2 => #34
SubscribeSubject "video time" => #35
#34, #35 -> TakeUntil
-> GroupWorkflow Image_2 => #37
    WorkflowInput Source1 => #0
    -> Timestamp => #1
    #0 -> Bonsai.Vision.CropPolygon => #2
      Regions(ArrayOfPoint(Point(X=171, Y=110), Point(X=196, Y=110), Point(X=196, Y=120), Point(X=171, Y=120)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #4
    #2, #4 -> GroupWorkflow Left_wheel => #5
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=64, Y=114), Point(X=274, Y=114), Point(X=274, Y=404), Point(X=64, Y=404)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Left_mouse => #7
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon => #8
      Regions(ArrayOfPoint(Point(X=444, Y=110), Point(X=469, Y=110), Point(X=469, Y=120), Point(X=444, Y=120)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #10
    #8, #10 -> GroupWorkflow Right_wheel => #11
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=343, Y=123), Point(X=553, Y=123), Point(X=553, Y=413), Point(X=343, Y=413)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Right_mouse => #13
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #5, #7, #11, #13 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L,
        Item3 as Wheelcount_R,
        Item4.X as X_R,
        Item4.Y as Y_R
        )
    #1, #15 -> Zip
    -> WorkflowOutput
SubscribeSubject rootpath
-> Format(Format={0}_Cam2_.csv, Selector=it)
-> PropertyMapping(FileName) => #40
#37, #40 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam2_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2"
-> MemberSelector(Selector=Item1.Value) => #42
SubscribeSubject rootpath
-> Format(Format={0}_Cam2_.avi, Selector=it)
-> PropertyMapping(FileName) => #45
#42, #45 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam2_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Repeat

SubscribeSubject Cam3 => #48
SubscribeSubject "video time" => #49
#48, #49 -> TakeUntil
-> GroupWorkflow Image_3 => #51
    WorkflowInput Source1 => #0
    -> Timestamp => #1
    #0 -> Bonsai.Vision.CropPolygon => #2
      Regions(ArrayOfPoint(Point(X=184, Y=113), Point(X=209, Y=113), Point(X=209, Y=123), Point(X=184, Y=123)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #4
    #2, #4 -> GroupWorkflow Left_wheel => #5
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=85, Y=117), Point(X=295, Y=117), Point(X=295, Y=407), Point(X=85, Y=407)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Left_mouse => #7
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon => #8
      Regions(ArrayOfPoint(Point(X=455, Y=113), Point(X=480, Y=113), Point(X=480, Y=123), Point(X=455, Y=123)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #10
    #8, #10 -> GroupWorkflow Right_wheel => #11
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=363, Y=118), Point(X=573, Y=118), Point(X=573, Y=408), Point(X=363, Y=408)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Right_mouse => #13
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #5, #7, #11, #13 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L,
        Item3 as Wheelcount_R,
        Item4.X as X_R,
        Item4.Y as Y_R
        )
    #1, #15 -> Zip
    -> WorkflowOutput
SubscribeSubject rootpath
-> Format(Format={0}_Cam3_.csv, Selector=it)
-> PropertyMapping(FileName) => #54
#51, #54 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam3_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2"
-> MemberSelector(Selector=Item1.Value) => #56
SubscribeSubject rootpath
-> Format(Format={0}_Cam3_.avi, Selector=it)
-> PropertyMapping(FileName) => #59
#56, #59 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam3_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Repeat

SubscribeSubject Cam4 => #62
SubscribeSubject "video time" => #63
#62, #63 -> TakeUntil
-> GroupWorkflow Image_4 => #65
    WorkflowInput Source1 => #0
    -> Timestamp => #1
    #0 -> Bonsai.Vision.CropPolygon => #2
      Regions(ArrayOfPoint(Point(X=183, Y=66), Point(X=208, Y=66), Point(X=208, Y=76), Point(X=183, Y=76)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #4
    #2, #4 -> GroupWorkflow Left_wheel => #5
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=94, Y=76), Point(X=304, Y=76), Point(X=304, Y=366), Point(X=94, Y=366)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Left_mouse => #7
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon => #8
      Regions(ArrayOfPoint(Point(X=467, Y=64), Point(X=492, Y=64), Point(X=492, Y=74), Point(X=467, Y=74)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #10
    #8, #10 -> GroupWorkflow Right_wheel => #11
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=358, Y=82), Point(X=568, Y=82), Point(X=568, Y=372), Point(X=358, Y=372)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Right_mouse => #13
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #5, #7, #11, #13 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L,
        Item3 as Wheelcount_R,
        Item4.X as X_R,
        Item4.Y as Y_R
        )
    #1, #15 -> Zip
    -> WorkflowOutput
SubscribeSubject rootpath
-> Format(Format={0}_Cam4_.csv, Selector=it)
-> PropertyMapping(FileName) => #68
#65, #68 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam4_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp,Item1.Timestamp.TimeOfDay.TotalMilliseconds,Item2"
-> MemberSelector(Selector=Item1.Value) => #70
SubscribeSubject rootpath
-> Format(Format={0}_Cam4_.avi, Selector=it)
-> PropertyMapping(FileName) => #73
#70, #73 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam4_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Repeat

SubscribeSubject Cam5 => #76
SubscribeSubject "video time" => #77
#76, #77 -> TakeUntil
-> GroupWorkflow Image_5 => #79
    WorkflowInput Source1 => #0
    -> Timestamp => #1
    #0 -> Bonsai.Vision.CropPolygon => #2
      Regions(ArrayOfPoint(Point(X=183, Y=160), Point(X=208, Y=160), Point(X=208, Y=170), Point(X=183, Y=170)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #4
    #2, #4 -> GroupWorkflow Left_wheel => #5
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=91, Y=173), Point(X=301, Y=173), Point(X=301, Y=463), Point(X=91, Y=463)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Left_mouse => #7
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon => #8
      Regions(ArrayOfPoint(Point(X=464, Y=142), Point(X=489, Y=142), Point(X=489, Y=152), Point(X=464, Y=152)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #10
    #8, #10 -> GroupWorkflow Right_wheel => #11
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=365, Y=157), Point(X=575, Y=157), Point(X=575, Y=447), Point(X=365, Y=447)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Right_mouse => #13
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #5, #7, #11, #13 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L,
        Item3 as Wheelcount_R,
        Item4.X as X_R,
        Item4.Y as Y_R
        )
    #1, #15 -> Zip
    -> WorkflowOutput
SubscribeSubject rootpath
-> Format(Format={0}_Cam5_.csv, Selector=it)
-> PropertyMapping(FileName) => #82
#79, #82 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam5_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2"
-> MemberSelector(Selector=Item1.Value) => #84
SubscribeSubject rootpath
-> Format(Format={0}_Cam5_.avi, Selector=it)
-> PropertyMapping(FileName) => #87
#84, #87 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam5_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Repeat

SubscribeSubject Cam6 => #90
SubscribeSubject "video time" => #91
#90, #91 -> TakeUntil
-> GroupWorkflow Image_6 => #93
    WorkflowInput Source1 => #0
    -> Timestamp => #1
    #0 -> Bonsai.Vision.CropPolygon => #2
      Regions(ArrayOfPoint(Point(X=206, Y=34), Point(X=231, Y=34), Point(X=231, Y=44), Point(X=206, Y=44)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #4
    #2, #4 -> GroupWorkflow Left_wheel => #5
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=120, Y=46), Point(X=330, Y=46), Point(X=330, Y=336), Point(X=120, Y=336)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Left_mouse => #7
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon => #8
      Regions(ArrayOfPoint(Point(X=496, Y=0), Point(X=521, Y=0), Point(X=521, Y=10), Point(X=496, Y=10)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #10
    #8, #10 -> GroupWorkflow Right_wheel => #11
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=394, Y=17), Point(X=604, Y=17), Point(X=604, Y=307), Point(X=394, Y=307)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Right_mouse => #13
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #5, #7, #11, #13 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L,
        Item3 as Wheelcount_R,
        Item4.X as X_R,
        Item4.Y as Y_R
        )
    #1, #15 -> Zip
    -> WorkflowOutput
SubscribeSubject rootpath
-> Format(Format={0}_Cam6_.csv, Selector=it)
-> PropertyMapping(FileName) => #96
#93, #96 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam6_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2"
-> MemberSelector(Selector=Item1.Value) => #98
SubscribeSubject rootpath
-> Format(Format={0}_Cam6_.avi, Selector=it)
-> PropertyMapping(FileName) => #101
#98, #101 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam6_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Repeat

SubscribeSubject Cam7 => #104
SubscribeSubject "video time" => #105
#104, #105 -> TakeUntil
-> GroupWorkflow Image_7 => #107
    WorkflowInput Source1 => #0
    -> Timestamp => #1
    #0 -> Bonsai.Vision.CropPolygon => #2
      Regions(ArrayOfPoint(Point(X=328, Y=85), Point(X=353, Y=85), Point(X=353, Y=95), Point(X=328, Y=95)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #4
    #2, #4 -> GroupWorkflow Left_wheel => #5
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=231, Y=92), Point(X=441, Y=92), Point(X=441, Y=382), Point(X=231, Y=382)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Left_mouse => #7
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon => #8
      Regions(ArrayOfPoint(Point(X=437, Y=34), Point(X=462, Y=34), Point(X=462, Y=44), Point(X=437, Y=44)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    SubscribeSubject Wheel_detect
    -> PropertyMapping(Value) => #10
    #8, #10 -> GroupWorkflow Right_wheel => #11
        WorkflowInput Source1
        -> Disable Bonsai.Vision.Grayscale
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=130, Val1=120, Val2=120, Val3=0), Upper(Val0=255, Val1=255, Val2=255, Val3=255))
        -> Disable Bonsai.Vision.Threshold(ThresholdValue=130, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #5
        ExternalizedMapping(Value) => #6
        #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=30))
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            count = 0
            pre = False
            @returns(int)
            def process(value):
              global count,pre
              if value:
                if value!=pre:
                  count +=1
                pre=value
              else:
                pre=False
              return count
        -> WorkflowOutput
    #0 -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=339, Y=47), Point(X=549, Y=47), Point(X=549, Y=337), Point(X=339, Y=337)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow Right_mouse => #13
        WorkflowInput Source1
        -> Bonsai.Vision.RangeThreshold(Lower(Val0=30, Val1=0, Val2=0, Val3=0), Upper(Val0=255, Val1=105, Val2=100, Val3=255))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> WorkflowOutput
    #5, #7, #11, #13 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L,
        Item3 as Wheelcount_R,
        Item4.X as X_R,
        Item4.Y as Y_R
        )
    #1, #15 -> Zip
    -> WorkflowOutput
SubscribeSubject rootpath
-> Format(Format={0}_Cam7_.csv, Selector=it)
-> PropertyMapping(FileName) => #110
#107, #110 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam7_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2"
-> MemberSelector(Selector=Item1.Value) => #112
SubscribeSubject rootpath
-> Format(Format={0}_Cam7_.avi, Selector=it)
-> PropertyMapping(FileName) => #115
#112, #115 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\labuser\Documents\FED_Data\ZY_Cam7_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Repeat
