WorkflowBuilder(Version=2.8.1)
GroupWorkflow "Define Cam and Timer"
    ExternalizedMapping(Index(DisplayName=Cam1))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam1
    -> Timestamp
    -> MemberSelector(Selector=Timestamp)
    -> PublishSubject Timer

    ExternalizedMapping(Index(DisplayName=Cam2))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam2

    ExternalizedMapping(Index(DisplayName=Cam3))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam3

    ExternalizedMapping(Index(DisplayName=Cam4))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam4

    ExternalizedMapping(Index(DisplayName=Cam5))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam5

    ExternalizedMapping(Index(DisplayName=Cam6))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Auto))
    -> PublishSubject Cam6

ExternalizedMapping(Value(DisplayName=Base_Filename))
-> StringProperty(Value=FED)
-> BehaviorSubject rootpath

ExternalizedMapping(Value(DisplayName=vedio_len_Hr))
-> IntProperty(Value=1)
-> Multiply(Operand=IntProperty(Value=108000))
-> PublishSubject video_len

ExternalizedMapping(PortName(DisplayName=Arduino_port))
-> Disable Bonsai.Arduino.CreateArduino(Name=Arduino, PortName=COM10, BaudRate=57600, SamplingInterval=10)

Disable SubscribeSubject Timer => #10
Disable ExternalizedMapping(Start(DisplayName=SessionStart)) => #11
#10, #11 -> Disable GroupWorkflow SessionStart
    WorkflowInput Source1
    -> MemberSelector(Selector=TimeOfDay) => #1
    ExternalizedMapping(Value(DisplayName=Start)) => #2
    #1, #2 -> GreaterThan(Operand=TimeSpanProperty(Value=PT17H))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> Disable Take(Count=1) => #13
Disable ExternalizedMapping(End(DisplayName=SessionEnd)) => #14
#13, #14 -> Disable SelectMany SaveUntil
    GroupWorkflow SavePelletCOunt
        ExternalizedMapping(Pin(DisplayName=FED1))
        -> Bonsai.Arduino.DigitalInput(PortName=COM10, Pin=2)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #2
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED1.csv, Selector=it)
        -> PropertyMapping(FileName) => #5
        #2, #5 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED2))
        -> Bonsai.Arduino.DigitalInput(PortName=COM10, Pin=3)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #10
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED2.csv, Selector=it)
        -> PropertyMapping(FileName) => #13
        #10, #13 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED3))
        -> Bonsai.Arduino.DigitalInput(PortName=COM10, Pin=4)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #18
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED3.csv, Selector=it)
        -> PropertyMapping(FileName) => #21
        #18, #21 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED4))
        -> Bonsai.Arduino.DigitalInput(PortName=COM10, Pin=5)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #26
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED4.csv, Selector=it)
        -> PropertyMapping(FileName) => #29
        #26, #29 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED4_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED5))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=6)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #34
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED5.csv, Selector=it)
        -> PropertyMapping(FileName) => #37
        #34, #37 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED5_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED6))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=7)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #42
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED6.csv, Selector=it)
        -> PropertyMapping(FileName) => #45
        #42, #45 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED6_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED7))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=8)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #50
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED7.csv, Selector=it)
        -> PropertyMapping(FileName) => #53
        #50, #53 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED7_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED8))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=9)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #58
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED8.csv, Selector=it)
        -> PropertyMapping(FileName) => #61
        #58, #61 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED8_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED9))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=10)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #66
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED9.csv, Selector=it)
        -> PropertyMapping(FileName) => #69
        #66, #69 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED9_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED10))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=11)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #74
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED10.csv, Selector=it)
        -> PropertyMapping(FileName) => #77
        #74, #77 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED10_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED11))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=12)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #82
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED11.csv, Selector=it)
        -> PropertyMapping(FileName) => #85
        #82, #85 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED11_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED12))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=13)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #90
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED12.csv, Selector=it)
        -> PropertyMapping(FileName) => #93
        #90, #93 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED12_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

    SubscribeSubject Timer => #1
    -> MemberSelector(Selector=TimeOfDay) => #2
    #1 -> GroupWorkflow NextDay
        WorkflowInput Source1
        -> MemberSelector(Selector=TimeOfDay) => #1
        -> Skip(Count=1) => #2
        #2, #1 -> Zip
        -> LessThan
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> Take(Count=1) => #4
    #2, #4 -> SkipUntil => #5
    ExternalizedMapping(Value(DisplayName=End)) => #6
    #5, #6 -> GreaterThan(Operand=TimeSpanProperty(Value=PT13H))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Disable Repeat
#13 -> Disable Delay(DueTime=PT2S)
-> Disable SelectMany A1_out
    BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=COM10, Pin=15) => #1
    ExternalizedMapping(DueTime) => #2
    #1, #2 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> Bonsai.Arduino.DigitalOutput(PortName=COM10, Pin=15)

SubscribeSubject Cam1 => #19
-> Timestamp => #20
#19 -> GroupWorkflow image_L_Chamber => #21
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L
        )
    -> WorkflowOutput
#19 -> GroupWorkflow image_R_Chamber => #22
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_R,
        Item2.X as X_R,
        Item2.Y as Y_R
        )
    -> WorkflowOutput
#20, #21, #22 -> Zip => #23
SubscribeSubject rootpath
-> Format(Format={0}_Cam1.csv, Selector=it)
-> PropertyMapping(FileName) => #26
#23, #26 -> Bonsai.IO.CsvWriter
  FileName=FED_Cam1.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2,Item3"
-> MemberSelector(Selector=Item1.Value) => #28
SubscribeSubject rootpath
-> Format(Format={0}_Cam1.avi, Selector=it)
-> PropertyMapping(FileName) => #31
#28, #31 -> Disable Bonsai.Vision.VideoWriter => #32
  FileName=FED_Cam1.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #34
#32, #34 -> Disable Take(Count=108000)
-> Disable Repeat

SubscribeSubject Cam2 => #37
-> Timestamp => #38
#37 -> GroupWorkflow image_L_Chamber => #39
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L
        )
    -> WorkflowOutput
#37 -> GroupWorkflow image_R_Chamber => #40
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_R,
        Item2.X as X_R,
        Item2.Y as Y_R
        )
    -> WorkflowOutput
#38, #39, #40 -> Zip => #41
SubscribeSubject rootpath
-> Format(Format={0}_Cam2.csv, Selector=it)
-> PropertyMapping(FileName) => #44
#41, #44 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2,Item3"
-> MemberSelector(Selector=Item1.Value) => #46
SubscribeSubject rootpath
-> Format(Format={0}_Cam2.avi, Selector=it)
-> PropertyMapping(FileName) => #49
#46, #49 -> Bonsai.Vision.VideoWriter => #50
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #52
#50, #52 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam3 => #55
-> Timestamp => #56
#55 -> GroupWorkflow image_L_Chamber => #57
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L
        )
    -> WorkflowOutput
#55 -> GroupWorkflow image_R_Chamber => #58
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_R,
        Item2.X as X_R,
        Item2.Y as Y_R
        )
    -> WorkflowOutput
#56, #57, #58 -> Zip => #59
SubscribeSubject rootpath
-> Format(Format={0}_Cam3.csv, Selector=it)
-> PropertyMapping(FileName) => #62
#59, #62 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2,Item3"
-> MemberSelector(Selector=Item1.Value) => #64
SubscribeSubject rootpath
-> Format(Format={0}_Cam3.avi, Selector=it)
-> PropertyMapping(FileName) => #67
#64, #67 -> Bonsai.Vision.VideoWriter => #68
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #70
#68, #70 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam4 => #73
-> Timestamp => #74
#73 -> GroupWorkflow image_L_Chamber => #75
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L
        )
    -> WorkflowOutput
#73 -> GroupWorkflow image_R_Chamber => #76
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_R,
        Item2.X as X_R,
        Item2.Y as Y_R
        )
    -> WorkflowOutput
#74, #75, #76 -> Zip => #77
SubscribeSubject rootpath
-> Format(Format={0}_Cam4.csv, Selector=it)
-> PropertyMapping(FileName) => #80
#77, #80 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2,Item3"
-> MemberSelector(Selector=Item1.Value) => #82
SubscribeSubject rootpath
-> Format(Format={0}_Cam4.avi, Selector=it)
-> PropertyMapping(FileName) => #85
#82, #85 -> Bonsai.Vision.VideoWriter => #86
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #88
#86, #88 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam5 => #91
-> Timestamp => #92
#91 -> GroupWorkflow image_L_Chamber => #93
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L
        )
    -> WorkflowOutput
#91 -> GroupWorkflow image_R_Chamber => #94
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_R,
        Item2.X as X_R,
        Item2.Y as Y_R
        )
    -> WorkflowOutput
#92, #93, #94 -> Zip => #95
SubscribeSubject rootpath
-> Format(Format={0}_Cam5.csv, Selector=it)
-> PropertyMapping(FileName) => #98
#95, #98 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2,Item3"
-> MemberSelector(Selector=Item1.Value) => #100
SubscribeSubject rootpath
-> Format(Format={0}_Cam5.avi, Selector=it)
-> PropertyMapping(FileName) => #103
#100, #103 -> Bonsai.Vision.VideoWriter => #104
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #106
#104, #106 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam6 => #109
-> Timestamp => #110
#109 -> GroupWorkflow image_L_Chamber => #111
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_L,
        Item2.X as X_L,
        Item2.Y as Y_L
        )
    -> WorkflowOutput
#109 -> GroupWorkflow image_R_Chamber => #112
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=630, Y=194), Point(X=675, Y=194), Point(X=675, Y=273), Point(X=630, Y=273)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=128))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        count = 0
        @returns(int)
        def process(value):
          global count
          if value:
            count +=1
          return count
    #0 -> Bonsai.Vision.CropPolygon(MaskType=ToZero, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid => #15
    #8, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Wheelcount_R,
        Item2.X as X_R,
        Item2.Y as Y_R
        )
    -> WorkflowOutput
#110, #111, #112 -> Zip => #113
SubscribeSubject rootpath
-> Format(Format={0}_Cam6.csv, Selector=it)
-> PropertyMapping(FileName) => #116
#113, #116 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Item1.Timestamp, Item1.Timestamp.TimeOfDay.TotalMilliseconds, Item2,Item3"
-> MemberSelector(Selector=Item1.Value) => #118
SubscribeSubject rootpath
-> Format(Format={0}_Cam6.avi, Selector=it)
-> PropertyMapping(FileName) => #121
#118, #121 -> Bonsai.Vision.VideoWriter => #122
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #124
#122, #124 -> Take(Count=108000)
-> Repeat
